PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SEMANTIC ASSOCIATION
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine STUDY_PHASE
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = "The cat saw the mouse in the corner"
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
      text = "The bank was closed for renovation."
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 8
      stopVal [duration (s)] = 2
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 10
      stopVal [duration (s)] = 3
      text = 'The plane flew over the bank.'
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 13
      stopVal [duration (s)] = 2
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  Routine WORD_ASSOCIATION_TASK
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        'Computer'
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder = Type here 
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 10
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 13
      stopVal [duration (s)] = 3
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      text:
        'Money'
    TextboxComponent textbox_2
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 16
      stopVal [duration (s)] = 10
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 26
      stopVal [duration (s)] = 3
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      text:
        Plane
    TextboxComponent textbox_3
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 29
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine STUDY_PHASE
    Routine WORD_ASSOCIATION_TASK
  LoopTerminator trials
